PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 800]
  expName = new_grating_pattern_glare
  logging level = debug
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Routines
  Routine experiment_setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Before Experiment:
        ### START SET EXPERIMENT CONSTANTS ###
        # diameter of grating stimulus
        GRATING_DIAMETER = 13.77
        # y coordinate of grating stimulus midpoint
        GRATING_MIDPOINT_Y = 1.5
        # diameter of grating center small circle
        SMALL_CIRCLE_DIAMETER = 0.2/13.77 * GRATING_DIAMETER

        # width of participant response slider
        SLIDER_WIDTH = 20
        SLIDER_HEIGHT = 0.7

        # confirmation button y coordinate
        CONFIRM_Y = -7.8

        # confirmation button width
        CONFIRM_BTN_WIDTH = 2.5

        # confirmation button height
        CONFIRM_BTN_HEIGHT = 1.2

        # confirmation text height
        CONFIRM_TXT_HEIGHT = CONFIRM_BTN_HEIGHT * 0.5

        # confirmation button text
        # 'Confirm'
        CONFIRM_TXT = 'Bekräfta'



        ### END SET EXPERIMENT CONSTANTS ###
  Routine trial_show_pattern
    GratingComponent grating_trial
      color = $[-1,-1,-1]
      mask = circle
      ori = 90
      phase [set every repeat] = 0
      pos = (0, GRATING_MIDPOINT_Y)
      saveStartStop = False
      sf [set every repeat] = 0.27
      size = (GRATING_DIAMETER, GRATING_DIAMETER)
      startVal [time (s)] = 0.0
      tex = sqr
      texture resolution = 512
      units = deg
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    CodeComponent code_trial
      Code Type = Py
      Begin Experiment:
        # changing the pattern texture resolution 'manually' because
        # the highest resolution by default in the PsychoPy Builder View
        # is 512
        grating_trial.texRes = 2048

        # form lists of stimuli specifications
        # grating phase
        grating_phases = [0, 0.5, 0.5]
        # grating spatial frequency
        grating_sfs = [0.27, 3, 11]

        # start trial counter, for stepping through stimuli
        # specifications
        trial_counter = 0
      Begin Routine:
        mouse_trial.status == STARTED
        buttons = []

        grating_trial.phase = grating_phases[trial_counter]

        grating_trial.sf = grating_sfs[trial_counter]
      Each Frame:
        buttons = mouse_trial.getPressed()
        # at least one button has been pressed
        if sum(buttons) > 0:
            # check if the mouse was inside our 'clickable' object
            if rectangle_trial_confirm.contains(mouse_trial) and slider_trial.getRating() is not None:
                continueRoutine = False
                gotValidClick = True
                confirm_click_time = tThisFlip
      End Routine:
        trials.addData('confirm_click_time', confirm_click_time)
        trials.addData('grating_spatial_frequency', grating_trial.sf)
        trials.addData('grating_phase', grating_trial.phase)

        trial_counter += 1
    PolygonComponent line_trial
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      ori = 90
      pos = (0, GRATING_MIDPOINT_Y)
      saveStartStop = False
      shape = line
      size = (GRATING_DIAMETER, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent circle_trial_mid
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 120
      pos = (0, GRATING_MIDPOINT_Y)
      saveStartStop = False
      shape = regular polygon...
      size = (SMALL_CIRCLE_DIAMETER, SMALL_CIRCLE_DIAMETER)
      startVal [time (s)] = 0.0
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    SliderComponent slider_trial
      forceEndRoutine = False
      granularity = 0
      labels = ('Extremt obehagligt','','','','','','','','','', 'Extremt behagligt')
      pos = (0, -6.5)
      saveStartStop = False
      size = (SLIDER_WIDTH, SLIDER_HEIGHT)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (-5, -4, -3, -2, -1, 0, 1, 2, 3, 4, 5)
      units = deg
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    MouseComponent mouse_trial
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_trial_confirm
      fillColor = $[1,1,1]
      pos = (0, CONFIRM_Y)
      saveStartStop = False
      shape = rectangle
      size = (CONFIRM_BTN_WIDTH, CONFIRM_BTN_HEIGHT)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent text_trial_confirm
      color = black
      letterHeight = CONFIRM_TXT_HEIGHT
      pos = (0, CONFIRM_Y)
      startVal [time (s)] = 0.0
      text = $CONFIRM_TXT
      units = deg
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  Routine trial_q_discomfort
Flow
  Routine experiment_setup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial_show_pattern
    Routine trial_q_discomfort
  LoopTerminator trials
